OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.1)
Comment
  The clock stimulator generates
  1 stim per second.

  The associated python script should
  print all the received stimulations.

Sinus generator => #0
  Clock frequency (Hz) = 1
  Script = C:/Users/andre/Desktop/openvibePythonScripts_Denis/valuesGenerator.py
  Channel count = 1
  Sampling frequency = 1
  Generated epoch sample count = 1
-> Python 3 scripting
  Clock frequency (Hz) = 1
  Script = C:/Users/andre/Desktop/openvibePythonScripts_Denis/mqttOutputBike.py
#0 -> Python 3 scripting
  Clock frequency (Hz) = 1
  Script = C:/Users/andre/Desktop/openvibePythonScripts_Denis/mqttOutputWalk.py
Data=#0 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Sinus generator => #4
  Clock frequency (Hz) = 1
  Script = C:/Users/andre/Desktop/openvibePythonScripts_Denis/mqttInputIMU.py
  Channel count = 4
  Sampling frequency = 1
  Generated epoch sample count = 1
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Sinus generator => #6
  Clock frequency (Hz) = 10
  Script = C:/Users/andre/Desktop/openvibePythonScripts_Denis/mqttInputFES1.py
  Channel count = 4
  Sampling frequency = 1
  Generated epoch sample count = 1
Data=#6 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Sinus generator => #8
  Clock frequency (Hz) = 10
  Script = C:/Users/andre/Desktop/openvibePythonScripts_Denis/mqttInputFES2.py
  Channel count = 4
  Sampling frequency = 1
  Generated epoch sample count = 1
Data=#8 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
